<?xml version="1.0" encoding="ISO-8859-1"?>
<config>

  <!-- The starting directory. -->
  <directory type="directory">C:/Users/Light-saver/Documents/storm_control/</directory>

  <!-- The setup name -->
  <setup_name type="string">Yale Leica</setup_name>

  <!-- The ui type, this is 'classic' or 'detached' -->
  <ui_type type="string">classic</ui_type>

  <!--
      This has two effects:

      (1) If this is True any exception will immediately crash HAL, which can
      be useful for debugging. If it is False then some exceptions will be
      handled by the modules.

      (2) If it is False we also don't check whether messages are valid.
  -->
  <strict type="boolean">True</strict>

  <!--
      Define the modules to use for this setup.
  -->
  <modules>

    <!--
	This is the main window, you must have this.
    -->
    <hal>
      <module_name type="string">storm_control.hal4000.hal4000</module_name>
      <class_name type="string">HalController</class_name>
    </hal>

    <!--
	You also need all of these.
    -->

    <!-- Camera display. -->
    <display>
      <class_name type="string">Display</class_name>
      <module_name type="string">storm_control.hal4000.display.display</module_name>
      <parameters>

	<!-- The default color table. Other options are in hal4000/colorTables/all_tables -->
	<colortable type="string">ramp.ctbl</colortable>

      </parameters>
    </display>

    <!-- Feeds. -->
    <feeds>
      <class_name type="string">Feeds</class_name>
      <module_name type="string">storm_control.hal4000.feeds.feeds</module_name>
    </feeds>

    <!-- Filming and starting/stopping the camera. -->
    <film>
      <class_name type="string">Film</class_name>
      <module_name type="string">storm_control.hal4000.film.film</module_name>

      <!-- Film parameters specific to this setup go here. -->
      <parameters>
	<extension desc="Movie file name extension" type="string" values=",Red,Green,Blue"></extension>
      </parameters>
    </film>

    <!-- Which objective is being used, etc. -->
    <mosaic>
      <class_name type="string">Mosaic</class_name>
      <module_name type="string">storm_control.hal4000.mosaic.mosaic</module_name>

      <!-- List objectives available on this setup here. -->
      <parameters>
	<flip_horizontal desc="Flip image horizontal (mosaic)" type="boolean">False</flip_horizontal>
	<flip_vertical desc="Flip image vertical (mosaic)" type="boolean">False</flip_vertical>
	<transpose desc="Transpose image (mosaic)" type="boolean">False</transpose>

	<objective desc="Current objective" type="string" values="obj1,obj2,obj3">obj1</objective>
	<obj1 desc="Objective 1" type="custom">100x,0.160,0.0,0.0</obj1>
	<obj2 desc="Objective 2" type="custom">10x,1.60,0.0,0.0</obj2>
	<obj3 desc="Objective 3" type="custom">4x,4.0,0.0,0.0</obj3>
      </parameters>
    </mosaic>

    <!-- Loading, changing and editting settings/parameters -->
    <settings>
      <class_name type="string">Settings</class_name>
      <module_name type="string">storm_control.hal4000.settings.settings</module_name>
    </settings>

    <!-- Set the time base for films. -->
    <timing>
      <class_name type="string">Timing</class_name>
      <module_name type="string">storm_control.hal4000.timing.timing</module_name>
      <parameters>
	<time_base type="string">camera1</time_base>
      </parameters>
    </timing>

    <!--
	Everything else is optional, but you probably want at least one camera.
    -->

    <!-- Camera control. -->
    <!--
	Note that the cameras must have the names "camera1", "camera2", etc..

	Cameras are either "master" (they provide their own hardware timing)
	or "slave" they are timed by another camera. Each time the cameras
	are started the slave cameras are started first, then the master cameras.
    -->

   <camera1>
      <class_name type="string">Camera</class_name>
      <module_name type="string">storm_control.hal4000.camera.camera</module_name>
      <camera>
        <master type="boolean">True</master>
        <class_name type="string">HamamatsuCameraControl</class_name>
        <module_name type="string">storm_control.hal4000.camera.hamamatsuCameraControl</module_name>
        <parameters>

          <!-- Which camera to use -->
          <camera_id type="int">0</camera_id>

          <!-- These are the display defaults, not the camera range. -->
          <default_max type="int">2304</default_max>
          <default_min type="int">100</default_min>
          <flip_horizontal type="boolean">False</flip_horizontal>
          <flip_vertical type="boolean">False</flip_vertical>
          <transpose type="boolean">True</transpose>


          <!-- These can be changed / editted. -->

          <!-- This is the extension to use (if any) when saving data from this camera. -->
          <extension type="string"></extension>

          <!-- Whether or not data from this camera is saved during filming. -->
          <saved type="boolean">True</saved>

        </parameters>
      </camera>
    </camera1>

    <!-- AOTF control -->
    <aotf>
      <module_name type="string">storm_control.sc_hardware.aaopto.aotfModule</module_name>
      <class_name type="string">AOTFModule</class_name>
      <used_during_filming type="boolean">False</used_during_filming>

      <configuration>

        <!-- These are the things that we provide AOTF functionality for.
             Other modules will request them with a 'get functionality'
             message and "name" = "aotf.xxx". -->

        <ilm642>
          <channel type="int">4</channel>
<!--          <frequency type="float">152.968</frequency>-->
          <maximum type="int">25</maximum>
          <used_during_filming type="boolean">False</used_during_filming>
        </ilm642>
        <ilm561>
          <channel type="int">3</channel>
<!--          <frequency type="float">112.591</frequency>-->
          <maximum type="int">25</maximum>
          <used_during_filming type="boolean">False</used_during_filming>
        </ilm561>
        <ilm488>
          <channel type="int">2</channel>
<!--          <frequency type="float">94.069</frequency>-->
          <maximum type="int">25</maximum>
          <used_during_filming type="boolean">False</used_during_filming>
        </ilm488>
      <ilm405>
          <channel type="int">1</channel>
<!--          <frequency type="float">79.125</frequency>-->
          <maximum type="int">25</maximum>
          <used_during_filming type="boolean">False</used_during_filming>
        </ilm405>

      </configuration>
    </aotf>

    <coherentGenesis488>
      <module_name type="string">storm_control.sc_hardware.coherent.genesisModule</module_name>
      <class_name type="string">CoherentGenesisModule</class_name>
      <used_during_filming type="boolean">False</used_during_filming>
      <configuration>

        <ilm642>
          <channel type="int">5</channel>
<!--          <frequency type="float">152.968</frequency>-->
          <maximum type="int">25</maximum>
          <used_during_filming type="boolean">False</used_during_filming>

        </ilm642>

      </configuration>
    </coherentGenesis488>


    <coherentGenesis560>
      <module_name type="string">storm_control.sc_hardware.coherent.genesisModule1</module_name>
      <class_name type="string">CoherentGenesisModule1</class_name>
      <used_during_filming type="boolean">False</used_during_filming>
      <configuration>

        <ilm642>
          <channel type="int">6</channel>
<!--          <frequency type="float">152.968</frequency>-->
          <maximum type="int">25</maximum>
          <used_during_filming type="boolean">False</used_during_filming>

        </ilm642>

      </configuration>
    </coherentGenesis560>


    <mpb642>
      <module_name type="string">storm_control.sc_hardware.mpbcomm.MPB642Module</module_name>
      <class_name type="string">MPB642Module</class_name>
      <used_during_filming type="boolean">False</used_during_filming>
      <configuration>

        <ilm642>
          <channel type="int">7</channel>
<!--          <frequency type="float">152.968</frequency>-->
          <maximum type="int">25</maximum>
          <used_during_filming type="boolean">False</used_during_filming>

        </ilm642>

      </configuration>
    </mpb642>


    <obis405>
      <module_name type="string">storm_control.sc_hardware.coherent.OBIS405Module</module_name>
      <class_name type="string">OBIS405Module</class_name>
      <used_during_filming type="boolean">False</used_during_filming>
      <configuration>

        <ilm642>
          <channel type="int">8</channel>
<!--          <frequency type="float">152.968</frequency>-->
          <maximum type="int">25</maximum>
          <used_during_filming type="boolean">False</used_during_filming>

        </ilm642>

      </configuration>
    </obis405>


	<z_stage>
      <class_name type="string">ZStage</class_name>
      <module_name type="string">storm_control.hal4000.miscControl.zStage</module_name>
      <configuration>
		<z_stage_fn type="string">pi_controller.z_stage</z_stage_fn>
		<large_step type="float">1</large_step>
		<retracted_z type="float">0</retracted_z>
		<small_step type="float">0.050</small_step>
      </configuration>
    </z_stage>

    <!-- Focus lock control GUI. -->
    <focuslock>
      <class_name type="string">FocusLock</class_name>
      <module_name type="string">storm_control.hal4000.focusLock.focusLock</module_name>
      <configuration>
	<ir_laser type="string">none_irlaser</ir_laser>
	<ir_power type="int">10</ir_power>
	<lock_modes type="string">NoLockMode,AutoLockMode,AlwaysOnLockMode,ZScanLockMode,OptimalLockMode,CalibrationLockMode</lock_modes>
	<qpd type="string">uc480_camera</qpd>
	<z_stage type="string">pi_controller.z_stage</z_stage>
	<parameters>
	  <find_sum>
	    <step_size type="float">1.0</step_size>
	  </find_sum>
	  <locked>
	    <buffer_length type="int">5</buffer_length>
	    <offset_threshold type="float">20.0</offset_threshold>
	  </locked>
	  <jump_size type="float">0.1</jump_size>
	</parameters>
      </configuration>
    </focuslock>

    <!-- Illumination (lasers, shutters, etc) control GUI. -->
    <illumination>
      <class_name type="string">Illumination</class_name>
      <module_name type="string">storm_control.hal4000.illumination.illumination</module_name>
      <configuration>

	<!-- Note: The name of the channel is the gui_name.
	     XML tags cannot start with numbers. -->

        <ch0>
          <gui_name type="string">AOTF 642</gui_name>
          <color type="string">255,0,0</color>
          <amplitude_modulation>
            <hw_fn_name>aotf.ilm642</hw_fn_name>
          </amplitude_modulation>
          <digital_modulation>
            <hw_fn_name>aotf.ilm642</hw_fn_name>
          </digital_modulation>

        </ch0>
        <ch1>
          <gui_name type="string">AOTF 561</gui_name>
          <color type="string">55,255,0</color>
          <amplitude_modulation>
            <hw_fn_name>aotf.ilm561</hw_fn_name>
          </amplitude_modulation>
          <digital_modulation>
            <hw_fn_name>aotf.ilm561</hw_fn_name>
          </digital_modulation>

        </ch1>

        <ch2>
          <gui_name type="string">AOTF 488</gui_name>
          <color type="string">0,200,255</color>
          <amplitude_modulation>
            <hw_fn_name>aotf.ilm488</hw_fn_name>
          </amplitude_modulation>
          <digital_modulation>
            <hw_fn_name>aotf.ilm488</hw_fn_name>
          </digital_modulation>

        </ch2>

        <ch3>
          <gui_name type="string">AOTF 405</gui_name>
          <color type="string">225,0,255</color>
          <amplitude_modulation>
            <hw_fn_name>aotf.ilm405</hw_fn_name>
          </amplitude_modulation>
          <digital_modulation>
            <hw_fn_name>aotf.ilm405</hw_fn_name>
          </digital_modulation>

        </ch3>

        <ch4>
          <gui_name type="string">Genesis0</gui_name>
          <color type="string">225,255,255</color>

          <digital_modulation>
            <hw_fn_name>coherentGenesis488.ilm642</hw_fn_name>
          </digital_modulation>

        </ch4>

        <ch5>
          <gui_name type="string">Genesis1</gui_name>
          <color type="string">225,255,255</color>

          <digital_modulation>
            <hw_fn_name>coherentGenesis560.ilm642</hw_fn_name>
          </digital_modulation>

        </ch5>

        <ch6>
          <gui_name type="string">MPB642</gui_name>
          <color type="string">225,255,255</color>

          <digital_modulation>
            <hw_fn_name>mpb642.ilm642</hw_fn_name>
          </digital_modulation>

        </ch6>

        <ch7>
          <gui_name type="string">OBIS405</gui_name>
          <color type="string">225,255,255</color>

          <digital_modulation>
            <hw_fn_name>obis405.ilm642</hw_fn_name>
          </digital_modulation>

        </ch7>


      </configuration>

    </illumination>





    <none_irlaser>
      <module_name type="string">storm_control.sc_hardware.none.noneIRLaserModule</module_name>
      <class_name type="string">NoneIRLaserModule</class_name>
    </none_irlaser>

    <pi_controller>
      <module_name type="string">storm_control.sc_hardware.physikInstrumente.piE625Module</module_name> <!--tigerModule-->
      <class_name type="string">PiController</class_name>
      <configuration>
        <serialnum type="int">0</serialnum>
        <devices>
          <z_stage>
            <center type="float">0.0</center>
            <has_center_bar type="boolean">True</has_center_bar>
            <maximum type="float">90</maximum>
            <minimum type="float">5</minimum>
            <warning_high type="float">900.0</warning_high>
            <warning_low type="float">-900.0</warning_low>
          </z_stage>
        </devices>
      </configuration>
    </pi_controller>






    <clemex_stage>
      <module_name type="string">storm_control.sc_hardware.marzhauser.marzhauserModule</module_name>
      <class_name type="string">MarzhauserStage</class_name> <!-- MarzhauserStageRS232  MarzhauserStageTango -->

      <configuration>
        <port type="string">COM10</port>
        <baudrate type="int">57600</baudrate>
        <velocity type="float">5</velocity> <!-- drop this -->
      </configuration>

    </clemex_stage>





    <!-- Progression control GUI -->
    <progressions>
      <module_name type="string">storm_control.hal4000.progressions.progressions</module_name>
      <class_name type="string">Progressions</class_name>
      <configuration>
	<illumination_functionality type="string">illumination</illumination_functionality>

	<frames type="int">100</frames>
	<increment type="float">0.01</increment>
	<starting_value type="float">0.1</starting_value>
      </configuration>
    </progressions>

    <!-- sCMOS calibration module -->
    <scmos_cal>
      <module_name type="string">storm_control.hal4000.miscControl.scmosCalibration</module_name>
      <class_name type="string">SCMOSCalibration</class_name>
    </scmos_cal>

    <!-- Spot counter and GUI -->
    <spotcounter>
      <module_name type="string">storm_control.hal4000.spotCounter.spotCounter</module_name>
      <class_name type="string">SpotCounter</class_name>
      <configuration>
	<max_threads type="int">4</max_threads>
	<max_size type="int">263000</max_size>
      </configuration>
    </spotcounter>

    <!-- Stage control GUI -->
    <stage>
      <module_name type="string">storm_control.hal4000.stage.stage</module_name>
      <class_name type="string">Stage</class_name>
      <configuration>
        <stage_functionality type="string">clemex_stage</stage_functionality>
        <velocity type="float">10.0</velocity>
        <large_step_size type="float">1000.0</large_step_size>
      </configuration>
    </stage>

    <!-- TCP control -->
    <tcp_control>
      <module_name type="string">storm_control.hal4000.tcpControl.tcpControl</module_name>
      <class_name type="string">TCPControl</class_name>
      <configuration>
	<parallel_mode type="boolean">True</parallel_mode>
	<tcp_port type="int">9000</tcp_port>
      </configuration>
    </tcp_control>

	<uc480_camera>
      <class_name type="string">UC480Camera</class_name>
      <module_name type="string">storm_control.sc_hardware.thorlabs.uc480CameraModule</module_name>
      <configuration>
        <parameters>
          <offset_has_center_bar type="boolean">True</offset_has_center_bar>
          <offset_maximum type="float">1.0</offset_maximum>
          <offset_minimum type="float">-1.0</offset_minimum>
          <offset_warning_high type="float">0.8</offset_warning_high>
          <offset_warning_low type="float">-0.8</offset_warning_low>
          <sum_maximum type="float">100000.0</sum_maximum>
          <sum_minimum type="float">50.0</sum_minimum>
          <sum_warning_low type="float">10000.0</sum_warning_low>
        </parameters>
        <background type="int">0</background>
        <camera_id type="int">1</camera_id>
        <ini_file type="string">C:/Users/Light-saver/Documents/storm_control/Hal2/storm_control/sc_hardware/thorlabs/uc480_settings.ini</ini_file>
        <offset_file type="string">C:\Users\Beta\MicroscopeSoftware\storm-control\storm_control\hal4000/cam_offsets_ORCA.txt</offset_file>
        <pixel_clock type="int">25</pixel_clock> <!-- 25 -->
        <sigma type="float">7</sigma>  <!-- was 3.5    storm5 uses 7-->
        <uc480_dll type="string">c:/windows/system32/uc480_64.dll</uc480_dll>
        <use_storm_analysis type="boolean">False</use_storm_analysis>
        <x_width type="int">300</x_width>
        <y_width type="int">150</y_width>
        <units_to_microns type="float">-0.007</units_to_microns>  <!-- -.007 works okay.   hbaic uses 0.264   storm5 uses 0.007-->
      </configuration>
    </uc480_camera>

  </modules>

</config>
